PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'Intials (Ex: VS)': '', 'ID Number (Ex: 001)': '001', 'Date (Ex: 01/01/2019)': '', 'Time (Ex: 2:30am)': '', 'Skill Level (Ex: Novice, Intermediate, or Expert) ': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1714, 1143]
  expName = Welcome1
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Routines
  Routine WelcomeScreen
    TextComponent textWelcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to Our Experinment

        Please have a seat and go over the instructions with the reseracher
    KeyboardComponent keyWelcome
      allowedKeys = 'space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Study_Trial
    TextComponent textStudyWord
      color [set every repeat] = $WordColor
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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      text [set every repeat]:
        $WordItem
  Routine blankRoutine
    TextComponent textBlank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine WaitScreen
    TextComponent textWait
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please get the researcher
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    KeyboardComponent keyWait
      allowedKeys = 'v'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testTrial
    TextComponent textWord
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $WordItem
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    KeyboardComponent keyWord
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endScreen
    TextComponent textEnd
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Thanks for participating

        Please see the researcher now
Flow
  Routine WelcomeScreen
  Routine blankRoutine
  LoopInitiator trialsStudy loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = wordstimuli.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('WordItem', 'VARUNIL'), ('WordColor', 'green')]),
      OrderedDict([('WordItem', 'STANLEY'), ('WordColor', 'green')]),
      OrderedDict([('WordItem', 'JAY'), ('WordColor', 'green')]),
      OrderedDict([('WordItem', 'VIGNESH'), ('WordColor', 'blue')]),
      OrderedDict([('WordItem', 'JAKE'), ('WordColor', 'blue')]),
      OrderedDict([('WordItem', 'ISBAH'), ('WordColor', 'blue')])]
    Routine Study_Trial
    Routine blankRoutine
  LoopTerminator trialsStudy
  Routine WaitScreen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = wordstimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('WordItem', 'VARUNIL'), ('WordColor', 'green')]),
      OrderedDict([('WordItem', 'STANLEY'), ('WordColor', 'green')]),
      OrderedDict([('WordItem', 'JAY'), ('WordColor', 'green')]),
      OrderedDict([('WordItem', 'VIGNESH'), ('WordColor', 'blue')]),
      OrderedDict([('WordItem', 'JAKE'), ('WordColor', 'blue')]),
      OrderedDict([('WordItem', 'ISBAH'), ('WordColor', 'blue')]),
      OrderedDict([('WordItem', 'UZZAL'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'BHAYAVA'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'RESHMA'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'NILESH'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'JIMMY'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'KEVIN'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'PARTH'), ('WordColor', None)])]
    Routine testTrial
    Routine blankRoutine
  LoopTerminator trials
  Routine endScreen
